PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = musicemotionlatency
  keyboardBackend = ioHub
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Routines
  Routine musicrusselquad
    CodeComponent getPos
      Code Type = Auto->JS
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      Begin Routine:
        mouse.clickReset()
        mouse_locs=[]
        target=musics_list.pop(0)[0]
        trials.addData('music.id', target)
        print(target)
      Each Frame:
        if mouse.isPressedIn(russellsQuad):
            mouse_loc = mouse.getPos()
            mouse_locs.append(mouse_loc)
            logging.log(level=logging.DATA, msg=mouse_loc)
            continueRoutine = False
      End Routine:
        if mouse_loc[0]<0 and mouse_loc[1]<0:
            trials.addData('Quadrants.id', 'Q3')
        if mouse_loc[0]>0 and mouse_loc[1]<0:
            trials.addData('Quadrants.id', 'Q4')
        if mouse_loc[0]>0 and mouse_loc[1]>0:
            trials.addData('Quadrants.id', 'Q1')
        if mouse_loc[0]<0 and mouse_loc[1]>0:
            trials.addData('Quadrants.id', 'Q2')
    ImageComponent russellsQuad
      image [set every repeat] = Russells-emotion-model.jpg
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
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    SoundComponent music
      sound [set every repeat] = $target
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      volume = 1.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent musictext
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $target
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  Routine startblock
    TextComponent starttext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Ouve a música. Tenta definir a sua posição em termos de valência e arousal clickando no rato.
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import random
        import csv

        musics_list=[]

        file = open(os.path.join("..",
            "data",
            "musics-list-per-file",
            "sub-15_music-list_run-4.csv"), "r")
        musics_list = list(csv.reader(file, delimiter=","))
        file.close()

        # Get the number os musics
        num_musics=len(musics_list)

        random.shuffle(musics_list)
        print("music list: ")
        print(musics_list)
  Routine endblock
    TextComponent goodbyetext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Terminado.
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  Routine ISI
    TextComponent fixCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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Flow
  Routine startblock
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = num_musics
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    Routine musicrusselquad
    Routine ISI
  LoopTerminator trials
  Routine endblock
