PsychoPy2experiment version="2022.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_run-%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['session'])
  Experiment info = {'participant': '', 'session': '1', 'trigger': 'False'}
  Full-screen window = False
  Monitor = retina
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = brainplayback_quadrants
  keyboardBackend = PsychToolbox
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Routines
  Routine WelcomeScreen
    TextComponent WelcomeMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Hello!
        Waiting for trigger...
  Routine InterStimulusInterval
    TextComponent FixationCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine MusicExcerptPresentation
    SoundComponent MusicExcerpt
      sound [set every repeat] = $musics
      startVal [time (s)] = 0
      stopVal [duration (s)] = 11.5
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    TextComponent ISI
      letterHeight = 0.1
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 0.5
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  Routine WaitForTrigger
    CodeComponent waitForTriggerCode
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['trigger']:

            print('Checking trigger to start experiment.')
            from psychopy import core, parallel
            import serial

            #initialise ports
            serialPort = serial.Serial("COM5", baudrate=57600, bytesize=8, parity='N', stopbits=1, timeout=0.0001)

            serialPort.flushInput();
            serialPort.flushOutput()


            #time out period
            timer = core.CountdownTimer(30)

            print('Checking trigger to start experiment.')

            while timer.getTime() > 0:
              nCharsToGet = serialPort.inWaiting()
              if (nCharsToGet)>0:
                  # number of incoming bytes.
                  message = serialPort.read(nCharsToGet)
                  #read the current characters
                  print(message)
                  break

            if (nCharsToGet)==0:
              print("*** TRIGGER NOT FOUND ***")
              core.quit()
      End Experiment:
        if expInfo['trigger']:
            serialPort.close()
  Routine musicID
    TextComponent musicIDText
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $musics
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  Routine rating
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        confirmar condition

        se controlo
            nao correr routine
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IncreaseMusicIdx
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        currentIdx=currentIdx+nMusics

        print('currentIdx = ' + str(currentIdx) )
  Routine Baseline_Noise
    TextComponent Baseline1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    SoundComponent Noise
      sound = music/noise.wav
      startVal [time (s)] = 12
      stopVal [duration (s)] = 12
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    TextComponent Baseline2
      letterHeight = 0.1
      startVal [time (s)] = 24
      stopVal [duration (s)] = 12
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  Routine BaselineFinal
    TextComponent Baseline3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 24
      stopVal [duration (s)] = 1.0
      text = Goodbye!
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  Routine RandomSelection
    CodeComponent randomSeq
      Code Type = Auto->JS
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      Begin Routine:
        import random
        import numpy as np

        nExcerpts = 225 # total number of excerpts per quadrant
        nMusics = 3 # number of musics that will be played during one trial per quadrant

        random.seed(expInfo['participant'])

        partName=expInfo['participant']

        A = np.random.RandomState(seed=round(random.random()*10)).permutation(np.arange(0,nExcerpts-nMusics*2))

        numMusicsPerSes = 6
        firstIdx = (int(expInfo['session'])-1) * numMusicsPerSes
        musicIdxs = A[firstIdx:firstIdx+numMusicsPerSes]

        currentIdx = 0


        print("musicIdxs = " + str(musicIdxs))
Flow
  Routine RandomSelection
  Routine WelcomeScreen
  Routine WaitForTrigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = MusicListSelect.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('MusicsSelect', 'MusicListQ1.csv')]),
        OrderedDict([('MusicsSelect', 'MusicListQ2.csv')]),
        OrderedDict([('MusicsSelect', 'MusicListQ3.csv')]),
        OrderedDict([('MusicsSelect', 'MusicListQ4.csv')])]
      Routine Baseline_Noise
      LoopInitiator trialsMusics loopType="TrialHandler"
        Selected rows = $musicIdxs[currentIdx:currentIdx+nMusics]
        conditionsFile = $MusicsSelect
        loopType = random
        nReps = 1
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        Routine MusicExcerptPresentation
      LoopTerminator trialsMusics
    LoopTerminator blocks
    Routine IncreaseMusicIdx
  LoopTerminator trials
  Routine BaselineFinal
